PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Enable Escape = False
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = misty_module
  keyboardBackend = PsychToolbox
  runMode = 0
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Routines
  Routine instructions
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    TextComponent intstructs
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Please answer the following artimetic questions to the best of your ability.

        You will be measured on both speed and accuracy.

        To ensure that we can use your results and complete our research we need you to perform at the level of your peers (indicated by the red arrow)

        You will now have a few practice trials.

        Press space to start
    KeyboardComponent space_to_cont
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    MouseComponent mouse
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      saveParamsClickable [set every repeat] = name,
      saveStartStop = False
      startVal [time (s)] = 0.0
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    CodeComponent flush_serial_1
      Code Type = Auto->JS
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      Each Frame:
        if defaultKeyboard.getKeys(keyList=['k']):
            if evntlg:
                sr.flush()
                sr.close()
            endExperiment(thisExp, win=win)
      End Routine:
        ### FE - prac-1 marker
        if evntlg :
            sr.write("FE".encode())
            core.wait(0.025)
            sr.write("RR".encode())
  Routine sum_routine1
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        # If serial object is loaded then use it
        if evntlg :
            sr.write(str(diffbyt).encode())
            core.wait(0.025)
            sr.write("RR".encode())

        msg = ""
        ## Set first trial conditions
        if trials_3.thisRepN == 0:
            #No pointer on first trial
            pointer_pos=-2
            expDict[exp_diff]=[]
            endblock=False
            blockTimer=core.CountdownTimer(exp_time)
            if testmode.nReps==0:
                time = 10
                tlim=90
            else:
                rtDict[exp_diff] = list(filter(None, rtDict[exp_diff]))
                time = np.mean(rtDict[exp_diff]) * time_coef
                tlim=0
                ### Reduce average trial time by 10%

            trial_counter=0
            thisdiffcor=0

        timer = core.CountdownTimer(time)
        eq_gen.make_equation(exp_diff)
        eq = "%s = ?" %(eq_gen.equation)
        ans = int(eq_gen.ans)
        timeout = False
      Each Frame:
        if defaultKeyboard.getKeys(keyList=['k']):
            if evntlg:
                sr.flush()
                sr.close()
            endExperiment(thisExp, win=win)
        if timer.getTime() <= 0:
            continueRoutine = False
            timeout = True
        if blockTimer.getTime() <=tlim:
            trials_3.finished=True
            continueRoutine=False
            timeout=False
            endblock=True
      End Experiment:
        print("Interrupted")
      End Routine:
        # Set serial to 0 if running
        if evntlg :
            sr.write("80".encode())
            core.wait(0.025)
            sr.write("RR".encode())
        # Set variables and adjust pointer
        if not endblock:
            ## Save responses
            thisExp.addData('streak.count', streak_count)
            thisExp.addData('time', time_coef)
            thisExp.addData('time.coef', time_coef)
            thisExp.addData('total.cor', total_cor)
            thisExp.addData('trial.count', trial_counter)
            thisExp.addData('trial.ans', ans)
            thisExp.addData('trial.eq', eq)
            ##  Create placeholder this_key
            this_key = "emp"
            if len(key_resp.keys) > 0:
                ## Cheat code
                if  "s" in key_resp.keys:
                    trials_3.finished=True
                    continueRoutine=False
                else:
                    this_key = int(key_resp.keys[0])
                    this_resp =[slider.getRating(), this_key]
                    ## When correct
                    if  ans in this_resp:
                        msg = "Correct!"  # For correct trials add one to
                        streak_count += 1   # correct counter
                        total_cor += 1
                        thisdiffcor += 1
                        # and total correct.
                        if trial_counter <= 5: ##for first trials increase perf
                            pointer_pos -= 0.02  # increase userAverage pointer by 0.05
                            #if pointer_pos <= .4: ## Don't go over 80%
                            #    pointer_pos = .4
                        elif trial_counter > 5: ## After trial 5, only decrease perf
                            pointer_pos += 0.02
                            if pointer_pos >= 1.8:
                                pointer_pos = 1.8
                    ##  When incorrect
                    elif ans not in this_resp: # For incorrect answers
                        msg = "Incorrect!"
                    if slider.getRT() is None:
                        RT = key_resp.rt
                    else:
                        RT = slider.getRT()
            ## When timed out
            elif timeout:
                    msg = "Timed Out!"
                    RT = time

            if timeout or msg == "Incorrect!":
                pointer_pos += 0.1  # add 0.1 (5%) to userAverage pointer (1-userAv)
                if streak_count > 0:
                    streak_count = 0
                    streak_count -= 1  # set streak to 0 and minus 1 (count incorrect)
                if pointer_pos >= 1.8:
                    pointer_pos = 1.8
            ### Set next trial times if needed
            if streak_count == 3:  # every 3 correct answers reduces the mean time by 10%
                time = (time * time_coef)
                streak_count = 0  # resets the counter
                if evntlg :
                    sr.write("80".encode())
                    core.wait(0.025)
                    sr.write("RR".encode())
            if streak_count == -3:  # every three incorrect answers
                time = (time/time_coef) # time is increased by 10%
                streak_count = 0  # resets counter
                if evntlg :
                    sr.write("05".encode())
                    core.wait(0.025)
                    sr.write("RR".encode())

            ### save message (Corr, Timeout, Incor
            thisExp.addData('trial.outcome', msg)

            if trial_counter == 1:
                if streak_count == 2:
                    pointer_pos=0.45
                elif streak_count < 2:
                    pointer_pos=0.9
            trial_counter += 1
        else:
            msg="End of block"
            propcor=(thisdiffcor/trial_counter)
            if propcor <= 0.5:
                thisrange="lowest"
            elif  propcor > 0.5 and propcor < 0.7:
                thisrange="low"
            else:
                thisrange = "low to middle"
            perf= f"You scored {thisdiffcor} out of {trial_counter} on this block. \n\n Your response speed was in the {thisrange} range. \n\n Please press space to continue."
    ProgressComponent prog
      anchor = top-left
      borderColor = white
      color = $(1.0000, -1.0000, -1.0000)
      fillColor = $(-1.0000, 0.5373, -1.0000)
      lineWidth = 4
      pos = (0.5, 0.5)
      progress [set every frame] = $0 + (timer.getTime()/time)
      size = (-1, 0.1)
      startVal [time (s)] = 0
      stopVal [duration (s)] = $time
      units = norm
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    PolygonComponent redbar
      anchor = center-left
      fillColor = $(1.0000, -1.0000, -1.0000)
      pos = (-1, 0.7)
      shape = rectangle
      size = (2, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $time
      units = norm
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    PolygonComponent yellowbar
      anchor = center-left
      fillColor = $(1.0000, 1.0000, -1.0000)
      pos = (0, 0.7)
      shape = rectangle
      size = (1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $time
      units = norm
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    PolygonComponent greenbar
      anchor = center-left
      fillColor = $(-1.0000, 0.0039, -1.0000)
      pos = (0.7, 0.7)
      shape = rectangle
      size = (0.3, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $time
      units = norm
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    PolygonComponent targarrow
      fillColor = white
      pos = (0.7,0.6)
      shape = arrow
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $time
      units = norm
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    PolygonComponent userArrow
      fillColor = white
      pos [set every repeat] = $(1-pointer_pos, 0.6)
      shape = arrow
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $time
      units = norm
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    TextboxComponent yourperfexp
      bold = False
      editable = False
      letterHeight = 0.05
      pos [set every repeat] = $(1-pointer_pos, 0.55)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $time
      text = You
      units = norm
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    TextboxComponent tarlabexp
      bold = False
      editable = False
      letterHeight = 0.05
      pos = (0.7, 0.55)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $time
      text = Target
      units = norm
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    TextboxComponent textbox
      bold = False
      editable = False
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $time
      text [set every repeat] = $eq
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    SliderComponent slider
      color = $(-1.0000, 0.0039, 0.0039)
      fillColor = $(1.0000, -0.4588, -1.0000)
      font = Noto Sans
      forceEndRoutine = True
      granularity = 0
      labels = (0, 1, 2, 3, 4, 5, 6, 7, 8, 9)
      letterHeight = 0.05
      pos = $slidershow
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $time
      styles = choice
      ticks = (0, 1, 2, 3, 4, 5, 6, 7, 8, 9)
      units = norm
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    KeyboardComponent key_resp
      allowedKeys = "1","2","3","4","5","6","7","8","9","0","s"
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $time
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    PolygonComponent norm_arrow
      fillColor = white
      pos = (0.7, 0.6)
      shape = arrow
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $time
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  Routine feedback
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    TextboxComponent feedback_practice_1
      bold = False
      editable = False
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $msg
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  Routine fixation
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    CodeComponent fix_pulse
      Code Type = Auto->JS
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      Begin Routine:
        ## 40 is event code 2 - reserved here for fixation
        if evntlg :
            sr.write("01".encode()) #Fixation signal
            core.wait(0.025)
            sr.write("RR".encode())
    TextComponent fix
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
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  Routine wait_screen
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    CodeComponent setup_exp
      Code Type = Both
      Begin Experiment:
        import serial
        from misty import misty
        # Create misty sum object
        eq_gen = misty.MistSums()
        eq_gen.make_equation("easy1")
        # Check for serial connection
        try:
            sr = serial.Serial("COM8", 115200, timeout=1)
            sr.write("RR".encode())
            print("Serial Connected")
            sertest= f'Serial Connected.'
            s_indicator_1 = 0
            s_indicator_2 = 0
            s_indicator_3 = 0

        except serial.serialutil.SerialException:
            sertest="Serial Not Connected"
            s_indicator_1 = 0
            s_indicator_2 = 0
            s_indicator_3 = 0
        evntlg = 'sr' in locals() or 'sr' in globals()

        ###C0 = event code 3 - reserved here for easy1 mode
        pracbyt="03"

        ### Invisible slider
        slidershow=(-5,-5)
        ### If you want the slider response
        ### then uncomment below
        #slidershow=(0, -0.4)

        # Set full containeer variables for experiment
        # appearance variables
        pointer_pos = .8  # x position of pointer
        msg = ""  # feedback message
        eq = ""  # equation string

        # Set placeholder variables for experiment
        # Behaviour
        streak_count = 0  # current streak
        total_cor = 0  # total number of correct answers
        rtDict = {} # Dictionary for lists of reaction times
        expDict={}
        time = 20  # starting value for trial time
        difficulty = "easy1"  # diffculty of equation
        time_coef = .9  # amount to reduce trial time by
        trial_counter = 0  # current trial
        perf=""
      Begin JS Experiment:
        import * as serial from 'serial';
        import {misty} from 'misty';
        function _pj_snippets(container) {
            function in_es6(left, right) {
                if (((right instanceof Array) || ((typeof right) === "string"))) {
                    return (right.indexOf(left) > (- 1));
                } else {
                    if (((right instanceof Map) || (right instanceof Set) || (right instanceof WeakMap) || (right instanceof WeakSet))) {
                        return right.has(left);
                    } else {
                        return (left in right);
                    }
                }
            }
            container["in_es6"] = in_es6;
            return container;
        }
        _pj = {};
        _pj_snippets(_pj);
        eq_gen = new misty.MistSums();
        eq_gen.make_equation("easy1");
        try {
            sr = new serial.Serial("COM8", 115200, {"timeout": 1});
            console.log("Serial Connected");
            sertest = `Serial Connected.`;
            s_indicator_1 = 0;
            s_indicator_2 = 0;
            s_indicator_3 = 0;
        } catch(e) {
            if ((e instanceof serial.serialutil.SerialException)) {
                sertest = "Serial Not Connected";
                s_indicator_1 = 0;
                s_indicator_2 = 0;
                s_indicator_3 = 0;
            } else {
                throw e;
            }
        }
        evntlg = (_pj.in_es6("sr", locals()) || _pj.in_es6("sr", globals()));
        pracbyt = "03";
        slidershow = [(- 5), (- 5)];
        pointer_pos = 0.8;
        msg = "";
        eq = "";
        streak_count = 0;
        total_cor = 0;
        rtDict = {};
        expDict = {};
        time = 20;
        difficulty = "easy1";
        time_coef = 0.9;
        trial_counter = 0;
        perf = "";
      Begin JS Routine:
        if (evntlg) {
            core.wait(0.1);
            sr.write("FF".encode());
            core.wait(0.1);
            sr.write("00".encode());
        }
      Begin Routine:
        if evntlg :
            ## FF is event code 255 - all channels to +5v
            ## Shouldn't matter which pin is monitored for
            ## Triggering
            core.wait(0.025) #wait 25MS resetting
            sr.write("FF".encode()) #Exp started
            core.wait(0.025) #wait 100MS resetting
            sr.write("RR".encode()) #Exp started
      Each Frame:
        if defaultKeyboard.getKeys(keyList=['k']):
            if evntlg:
                sr.flush()
                sr.close()
            endExperiment(thisExp, win=win)

        if evntlg:
            if s_indicator_1 < 0.19:
                s_indicator_1 += 0.05
                s_indicator_3 += 0.05
            if s_indicator_2 < 0.70:
                s_indicator_2 += 0.05

        else:
            if s_indicator_1 < 1:
                s_indicator_1 += 0.1
      Each JS Frame:
        if (evntlg) {
            if ((s_indicator_1 < 0.19)) {
                s_indicator_1 += 0.05;
                s_indicator_3 += 0.05;
            }
            if ((s_indicator_2 < 0.7)) {
                s_indicator_2 += 0.05;
            }
        } else {
            if ((s_indicator_1 < 1)) {
                s_indicator_1 += 0.1;
            }
        }
      End Experiment:
        if evntlg :
            sr.flush()
            sr.close()
      End JS Experiment:
        if (evntlg) {
            sr.flush();
            sr.close();
        }
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text [set every repeat] = Please wait for the experimenter's instructions
      units = norm
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    KeyboardComponent key_resp_2
      allowedKeys = 'l'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    PolygonComponent polygon
      fillColor [set every frame] = $(s_indicator_1, s_indicator_2, s_indicator_3)
      pos = (-0.5, -0.5)
      shape = circle
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      units = norm
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    TextComponent text_8
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      pos = (-0.49, -0.5)
      startVal [time (s)] = 0.0
      text [set every repeat] = $sertest
      units = norm
      wrapWidth = 0.1
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  Routine training_routine_1
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    CodeComponent training_code
      Code Type = Auto->JS
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      Begin Routine:
        msg = ""
        if trials_2.thisN==0:
            blockTimer=core.CountdownTimer(train_time)
            rtDict[train_diff]=[]

        #Generate response
        eq_gen.make_equation(train_diff)
        eq = "%s = ?" %(eq_gen.equation)
        ans = int(eq_gen.ans)

        if evntlg :
            sr.write(str(train_byt).encode())
            core.wait(0.025)
            sr.write("RR".encode())
      Each Frame:
        if defaultKeyboard.getKeys(keyList=['k']):
            if evntlg:
                sr.flush()
                sr.close()
            endExperiment(thisExp, win=win)
        if blockTimer.getTime() <= 0:
            endblock=True
            continueRoutine = False
            trials_2.finished = True
        else:
            endblock=False
      End Routine:
        # Set serial to 0 if running
        if evntlg :
            sr.write("80".encode())
            core.wait(0.025)
            sr.write("RR".encode())

        if not endblock:
            this_key = "emp"
            if len(key_resp_train.keys) > 0:
                if  "s" in key_resp_train.keys:
                    rtDict[train_diff].append(10)
                    trials_2.finished=True
                    continueRoutine=False
                else:
                    this_key = int(key_resp_train.keys[0])
                    this_resp =[slider_training.getRating(), this_key]

            if  ans in this_resp:
                msg = "Correct!"  # For correct trials add one to

            elif ans not in this_resp: # For incorrect answers
                msg = "Incorrect!"

            if slider.getRT() is None:
                RT = key_resp_train.rt
            else:
                RT = slider_training.getRT()
            #Save rt to dictionary
            rtDict[train_diff].append(RT)

            ### save message (Corr, Timeout, Incor
            thisExp.addData('trial.outcome', msg)
            thisExp.addData('training.difficulty', train_diff)
            thisExp.addData('training.bytdiff', train_diff)

        else:
            msg="End of block"
    TextboxComponent textbox_3
      bold = False
      editable = False
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      text [set every repeat] = $eq
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    SliderComponent slider_training
      color = $(-1.0000, 0.0039, 0.0039)
      fillColor = $(1.0000, -0.4588, -1.0000)
      font = Noto Sans
      forceEndRoutine = True
      granularity = 0
      labels = (0, 1, 2, 3, 4, 5, 6, 7, 8, 9)
      letterHeight = 0.05
      pos = $slidershow
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = choice
      ticks = (0, 1, 2, 3, 4, 5, 6, 7, 8, 9)
      units = norm
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    KeyboardComponent key_resp_train
      allowedKeys = "1","2","3","4","5","6","7","8","9","0","s"
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine pract_trials
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  Routine practice_trials
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    CodeComponent practice_code
      Code Type = Both
      Begin JS Routine:
        if (evntlg) {
            sr.write("FF".encode());
            core.wait(0.1);
            sr.write("00".encode());
        }
        msg = "";
        eq_gen.make_equation("easy1");
        eq = `${eq_gen.equation}`;
        ans = Number.parseInt(eq_gen.ans);
      Begin Routine:
        # If serial object is loaded then use it
        # Practice trials are all easy1
        if evntlg :
            sr.write(str(pracbyt).encode())
            core.wait(0.025)
            sr.write("RR".encode())
        # Feedback message starts empty
        msg = ""

        #Set sum for this repetition
        eq_gen.make_equation("easy1")
        eq = "%s = ?" %(eq_gen.equation)
        ans = int(eq_gen.ans)
      Each Frame:
        if defaultKeyboard.getKeys(keyList=['k']):
            if evntlg:
                sr.flush()
                sr.close()
            endExperiment(thisExp, win=win)
      End JS Routine:
        var _pj;
        function _pj_snippets(container) {
            function in_es6(left, right) {
                if (((right instanceof Array) || ((typeof right) === "string"))) {
                    return (right.indexOf(left) > (- 1));
                } else {
                    if (((right instanceof Map) || (right instanceof Set) || (right instanceof WeakMap) || (right instanceof WeakSet))) {
                        return right.has(left);
                    } else {
                        return (left in right);
                    }
                }
            }
            container["in_es6"] = in_es6;
            return container;
        }
        _pj = {};
        _pj_snippets(_pj);
        if (evntlg) {
            sr.write("80".encode());
            core.wait(0.1);
            sr.write("00".encode());
        }
        this_key = "emp";
        if ((key_resp_4.keys.length > 0)) {
            if (_pj.in_es6("s", key_resp_4.keys)) {
                prac_trials.finished = true;
                continueRoutine = false;
            } else {
                this_key = Number.parseInt(key_resp_4.keys[0]);
            }
        }
        this_resp = [slider_3.getRating(), this_key];
        if (_pj.in_es6(ans, this_resp)) {
            msg = "Correct!";
        } else {
            if ((! _pj.in_es6(ans, this_resp))) {
                msg = "Incorrect!";
            }
        }
      End Routine:
        if evntlg:
            ## 80 is event code 1, reserved here for end of trial
            sr.write("80".encode())
            core.wait(0.025)
            sr.write("RR".encode())
        # Set variables and adjust pointer
        this_key = "emp"
        if len(key_resp_4.keys) > 0:
            if  "s" in key_resp_4.keys:
                prac_trials.finished=True
                continueRoutine=False
            else:
                this_key = int(key_resp_4.keys[0])
        this_resp =[slider_3.getRating(), this_key]

        if  ans in this_resp:
            msg = "Correct!"  # For correct trials add one to

        elif ans not in this_resp: # For incorrect answers
            msg = "Incorrect!"
    TextboxComponent equation_practice_1
      bold = False
      editable = False
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
      text [set every repeat] = $eq
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    SliderComponent slider_3
      color = $(-1.0000, 0.0039, 0.0039)
      fillColor = $(1.0000, -0.4588, -1.0000)
      font = Noto Sans
      forceEndRoutine = True
      granularity = 0
      labels = (0, 1, 2, 3, 4, 5, 6, 7, 8, 9)
      letterHeight = 0.05
      pos = $slidershow
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
      styles = choice
      ticks = (0, 1, 2, 3, 4, 5, 6, 7, 8, 9)
      units = norm
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    KeyboardComponent key_resp_4
      allowedKeys = "1","2","3","4","5","6","7","8","9","0","s"
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
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  Routine practice_trials_2
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    CodeComponent practice_code_2
      Code Type = Auto->JS
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      Begin Routine:
        msg = ""
        time=prac_time
        timer = core.CountdownTimer(time)

        #Set sum for this repetition
        eq_gen.make_equation("easy1")
        eq = "%s = ?" %(eq_gen.equation)
        ans = int(eq_gen.ans)
        timeout = False
        # If serial object is loaded then use it
        if evntlg :
            sr.write(str(pracbyt).encode())
            core.wait(0.025)
            sr.write("RR".encode())
      Each Frame:
        if defaultKeyboard.getKeys(keyList=['k']):
            sr.flush()
            sr.close()
            endExperiment(thisExp, win=win)

        if timer.getTime() <= 0:
            timeout = True
            continueRoutine = False
      End Routine:
        # Set serial to 0 if running
        if evntlg:
            sr.write("80".encode())
            core.wait(0.025)
            sr.write("RR".encode())

        # Set variables and adjust pointer
        this_key = "emp"
        if len(key_resp_5.keys) > 0:
            if  "s" in key_resp_5.keys:
                prac_trial2.finished=True
                continueRoutine=False
            else:
                this_key = int(key_resp_5.keys[0])
                this_resp =[slider_4.getRating(), this_key]

        if  ans in this_resp:
            msg = "Correct!"  # For correct trials add one to

        if  "s" in this_resp:
            prac_trials2.finished=True

        elif (timeout is True):
            msg = "Time-Out!"

        elif ans not in this_resp: # For incorrect answers
            msg = "Incorrect!"
    ProgressComponent prog_3
      anchor = top-left
      borderColor = white
      color = $(-1.0000, 0.5373, -1.0000)
      fillColor = $(1.0000, -1.0000, -1.0000)
      lineWidth = 4
      pos = (0.5, 0.5)
      progress [set every frame] = $0 + (timer.getTime()/time)
      size = (-1, 0.1)
      startVal [time (s)] = 0
      stopVal [duration (s)] = $time
      units = norm
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    PolygonComponent redbar_3
      anchor = center-left
      fillColor = $(1.0000, -1.0000, -1.0000)
      pos = (-1, 0.7)
      shape = rectangle
      size = (2,0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $time
      units = norm
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    PolygonComponent yellowbar_3
      anchor = center-left
      fillColor = $(1.0000, 1.0000, -1.0000)
      pos = (0, 0.7)
      shape = rectangle
      size = (1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $time
      units = norm
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    PolygonComponent greenbar_3
      anchor = center-left
      fillColor = $(-1.0000, 0.0039, -1.0000)
      pos = (0.7, 0.7)
      shape = rectangle
      size = (0.3, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $time
      units = norm
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    PolygonComponent arrow_3
      fillColor = white
      pos [set every repeat] = $(1-pointer_pos, 0.6)
      shape = arrow
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $time
      units = norm
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    PolygonComponent arrow_4
      fillColor = white
      pos [set every repeat] = (0.7,0.6)
      shape = arrow
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $time
      units = norm
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    TextboxComponent targlab
      bold = False
      editable = False
      letterHeight = 0.05
      pos = (0.7, 0.55)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $time
      text = Target
      units = norm
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    TextboxComponent yourperf
      bold = False
      editable = False
      letterHeight = 0.05
      pos [set every repeat] = $(1-pointer_pos, 0.55)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $time
      text = You
      units = norm
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    SliderComponent slider_4
      color = $(-1.0000, 0.0039, 0.0039)
      fillColor = $(1.0000, -0.4588, -1.0000)
      font = Noto Sans
      forceEndRoutine = True
      granularity = 0
      labels = (0, 1, 2, 3, 4, 5, 6, 7, 8, 9)
      letterHeight = 0.05
      pos = $slidershow
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $time
      styles = choice
      ticks = (0, 1, 2, 3, 4, 5, 6, 7, 8, 9)
      units = norm
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    KeyboardComponent key_resp_5
      allowedKeys = "1","2","3","4","5","6","7","8","9","0","s"
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $time
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    TextboxComponent textbox_5
      bold = False
      editable = False
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $time
      text [set every repeat] = $eq
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  Routine new_ui
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = The next three trials will include the full user interface.
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    KeyboardComponent key_resp_8
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent flush_serial_2
      Code Type = Auto->JS
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      Begin Routine:
        ## FD - second practice starts
        if evntlg :
            sr.write("FD".encode())
            core.wait(0.025)
            sr.write("RR".encode())
      Each Frame:
        if defaultKeyboard.getKeys(keyList=['k']):
            if evntlg:
                sr.flush()
                sr.close()
            endExperiment(thisExp, win=win)
  Routine training_instructions
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    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        End of Practice.

        The experimenter will tell you what happens next.
    KeyboardComponent key_resp_9
      allowedKeys = 'l'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent flush_serial_3
      Code Type = Auto->JS
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      Each Frame:
        if defaultKeyboard.getKeys(keyList=['k']):
            if evntlg:
                sr.flush()
                sr.close()
            endExperiment(thisExp, win=win)
      End Routine:
        ## FC - training start
        if evntlg :
            sr.write("FC".encode())
            core.wait(0.025)
            sr.write("RR".encode())
  Routine next_block
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    TextComponent text_4
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Please press space to move onto the next block
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    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent flush_serial_4
      Code Type = Auto->JS
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      Each Frame:
        if defaultKeyboard.getKeys(keyList=['k']):
            if evntlg:
                sr.flush()
                sr.close()
            endExperiment(thisExp, win=win)
      End Routine:
        ## FB - next training block
        if evntlg :
            sr.write("FB".encode())
            core.wait(0.025)
            sr.write("RR".encode())
  Routine perf_feedback
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    TextComponent text_5
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $perf
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    KeyboardComponent key_resp_6
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent flush_serial_5
      Code Type = Auto->JS
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      Each Frame:
        if defaultKeyboard.getKeys(keyList=['k']):
            if evntlg:
                sr.flush()
                sr.close()
            endExperiment(thisExp, win=win)
      End Routine:
        ### F9 - new experiment block
        if evntlg :
            sr.write("F9".encode())
            core.wait(0.025)
            sr.write("RR".encode())
  Routine start_experiment
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    TextComponent text_6
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = The experimenter will now start the main task.
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    KeyboardComponent key_resp_7
      allowedKeys = 'l'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_2
      Code Type = Auto->JS
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      Each Frame:
        if defaultKeyboard.getKeys(keyList=['k']):
            if evntlg:
                sr.flush()
                sr.close()
            endExperiment(thisExp, win=win)
      End Routine:
        ## FA - begin experiment
        if evntlg :
            sr.write("FA".encode())
            core.wait(0.025)
            sr.write("RR".encode())
  Routine thanks
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    TextComponent text_7
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = The task is now over.  Thank you for participating.
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    KeyboardComponent key_resp_10
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  LoopInitiator testmode loopType="TrialHandler"
    loopType = random
    nReps = 1
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    Routine wait_screen
    Routine instructions
    LoopInitiator prac_trials loopType="TrialHandler"
      conditionsFile = config/practice_difficulty.xlsx
      loopType = random
      nReps = 1
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      conditions:
        [{'prac_diff': 'easy1', 'prac_time': 30},
        {'prac_diff': 'easy1', 'prac_time': 15},
        {'prac_diff': 'easy1', 'prac_time': 5}]
      Routine fixation
      Routine practice_trials
      Routine feedback
    LoopTerminator prac_trials
    Routine new_ui
    LoopInitiator prac_trial2 loopType="TrialHandler"
      conditionsFile = config/practice_difficulty.xlsx
      loopType = sequential
      nReps = 1
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      conditions:
        [{'prac_diff': 'easy1', 'prac_time': 30},
        {'prac_diff': 'easy1', 'prac_time': 15},
        {'prac_diff': 'easy1', 'prac_time': 5}]
      Routine fixation
      Routine practice_trials_2
      Routine feedback
    LoopTerminator prac_trial2
    Routine training_instructions
    LoopInitiator training_trials loopType="TrialHandler"
      conditionsFile = config/training.csv
      loopType = sequential
      nReps = 1
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      conditions:
        [OrderedDict([('train_diff', 'easy1'), ('train_time', np.int64(60)), ('train_byt', 'C0')]),
        OrderedDict([('train_diff', 'easy2'), ('train_time', np.int64(60)), ('train_byt', 20.0)]),
        OrderedDict([('train_diff', 'med1'), ('train_time', np.int64(60)), ('train_byt', 'A0')]),
        OrderedDict([('train_diff', 'med2'), ('train_time', np.int64(60)), ('train_byt', 60.0)]),
        OrderedDict([('train_diff', 'hard'), ('train_time', np.int64(60)), ('train_byt', 'E0')])]
      LoopInitiator trials_2 loopType="TrialHandler"
        loopType = random
        nReps = 1000
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        Routine fixation
        Routine training_routine_1
        Routine feedback
      LoopTerminator trials_2
      Routine next_block
    LoopTerminator training_trials
  LoopTerminator testmode
  Routine start_experiment
  LoopInitiator experimental_trials loopType="TrialHandler"
    conditionsFile = config/experiment_difficulty.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'exp_diff': 'easy1', 'exp_time': 120, 'diffbyt': 'C0'},
      {'exp_diff': 'easy2', 'exp_time': 120, 'diffbyt': 20},
      {'exp_diff': 'med1', 'exp_time': 120, 'diffbyt': 'A0'},
      {'exp_diff': 'med2', 'exp_time': 120, 'diffbyt': 60.0},
      {'exp_diff': 'hard', 'exp_time': 120, 'diffbyt': 'E0'}]
    LoopInitiator trials_3 loopType="TrialHandler"
      loopType = random
      nReps = 1000
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      Routine fixation
      Routine sum_routine1
      Routine feedback
    LoopTerminator trials_3
    Routine perf_feedback
  LoopTerminator experimental_trials
  Routine thanks
